<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' ClearInventory='0' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet_red4-6.dev' Display_User_Task_Descriptions='1' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' ImportInventory='0' InventoryFile='' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Constants:
var MAX_VOLUME = 170;
var MAX_MIX_VOLUME = 150;
var PRE_ASP_LARGE = 15;
var PRE_ASP_MEDIUM = 10;
var PRE_ASP_SMALL = 5;

var enzymeTemp = 4;
var tempRt =  20;

//Some temporary variables
var tempo;

// Oil parameters
var oilVolume = 40;
var preWetVolume = 1;

// Get global protocol parameters// 
var global = GetGlobalObject();
/* Reads in the settings namespace that is
specific for this part of the protocol*/
if(global.runsetMode) global.updateRunset();


var tipBox = global.strtVariables.tipBox || &quot;TipBox1&quot;;
var tips = global.strtVariables.tips || [1,2,3,4,5,6,7,8];
//var trashPosition = global.strtVariables.trashPosition || 1;
var trashTips = global.strtVariables.trashTips || [1,2,3,4,5,6,7,8]; 
var oilPosition = global.strtVariables.oilPosition || 6;
var waterPosition =  global.strtVariables.waterPosition ||5;

// If running standalone:
var pTipsInTrash = function (trashTips, headMode){
	var rows = parseInt(headMode.split(&quot;,&quot;)[2], 10);
	var direction = parseInt(headMode.split(&quot;,&quot;)[1], 10);
	if (direction === 1 || direction === 2){
		var trashTipRow = trashTips[0];
		trashTips = trashTips.slice(rows, trashTips.length);
	}else if (direction === 0 || direction === 3){
		var trashTipRow = trashTips[0] + rows - 1;
		trashTips = trashTips.slice(rows, trashTips.length);
	}else{
		throw &quot;Weird headMode&quot;;
	}	
	return {trashTips:trashTips, trashTipRow:trashTipRow};
}

var pDph = function (vol, endHeight) {
	var v = parseFloat(vol);
	var e = parseFloat(endHeight);
	if(v &gt; 0 &amp;&amp; e &gt; 0 &amp;&amp; !isNaN(v+e)) {
		return 0.078 - 9.501E-5*v + (0.734-e)/v;
	} else {
		throw &quot;ValueException&quot;;
	}
}
var pTipCounter = function (rows, tipsUsed){
	var tipsLeft = tipsLeft - rows;
	return {tipBox:tipBox, tipsLeft:tipsLeft};
}

var pTipTracker = function (tips, headMode){
	var rows = parseInt(headMode.split(&quot;,&quot;)[2], 10);
	var direction = parseInt(headMode.split(&quot;,&quot;)[1], 10);
	// direction = 2; the headmode is set to use the back rows
	// direction = 3: the headmode is set to use the front rows
	if (direction === 1 || direction === 2){
		var tipRow = tips[tips.length-rows];
		// tipRow is the upmost tip row that will be used
		tips = tips.slice(0, tips.length - rows);
		// tips is an array that looks like this at the start [1,2,3,4,5,6,7,8]
	}else if (direction === 0 ||direction === 3){
		var tipRow = tips[rows - 1]
		tips = tips.slice(rows, tips.length);
	}else{
		throw &quot;Weird headMode&quot;;
	}
	return {tips:tips, tipRow:tipRow};
}


// Reading in global functions
var dph = global.dph || pDph;
var tipsInTrash = global.tipsInTrash || pTipsInTrash;
var tipCounter = global.tipCounter || pTipCounter;
var tipTracker = global.tipTracker || pTipTracker;

//For testing purposes
var timeMod = global.timeMod || 60; 
// For changing between testing and running; shortens incubation times to seconds
// in normal mode the timeMod is 60

var rows = global.formRows || 1;
var headMode = &quot;2,2,&quot;+ rows+&quot;,1&quot;;
var protocolName = global.formProtocol || &quot;cDNA synthesis&quot;;

// Denaturation parameters
var sampleRow = global.settings.sampleRow || 3;
var sampleVolume = global.settings.sampleVolume || 12;
var cdnaSynthesisRow = global.settings.cdnaSynthesisRow || 3;
var primerDenatTime = global.settings.primerDenatTime || 5 * timeMod;
var primerDenatTemp = global.settings.primerDenatTemp || 65;

// cDNA synthsis parameters
var superscriptRow = global.settings.superscriptRow || 4;
var superscriptVolume = global.settings.superscriptVolume || 8;
var cdnaSynthesisTime = global.settings.cdnaSynthesisTime || 60 * timeMod; 
var cdnaSynthesisTemp = global.settings.cdnaSynthsesisTemp || 50;

// dilution parameters
var dilutionRow = global.settings.dilutionRow || 4;
var dilutionVolume = global.settings.dilutionVolume || 15;

// Testing out status bar
global.currentStep = &quot;Starting cDNA synthesis step...&quot;;

print(&quot;This is timeMod, &quot; + timeMod);
print(&quot;This is global.formTimeMod, &quot; + global.formTimeMod);
print(&quot;This is global.timeMod, &quot; + global.timeMod);' />
					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='4' />
						<Parameter Category='' Name='Wait' Value='0' />
						<Parameter Category='' Name='Temperature Tolerance' Value='2' />
						<Parameter Category='' Name='Timeout' Value='10' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' TaskParameterScript='=primerDenatTemp;' Value='4' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='2' />
						<Parameter Category='' Name='Timeout' Value='10' />
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						<Parameter Category='Task Description' Name='Task description' Value='Set temperature - Position (Bravo)' />
						<Parameter Category='Task Description' Name='Use default task description' Value='0' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup ' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='primerDenaturation' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='primerDenaturation' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='cdnaSynthesis' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='cdnaSynthesis' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='dilution' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='dilution' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='EnzymePlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='primerDenaturation' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='cdnaSynthesis' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='dilution' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='ReactionPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='Task Description' Name='Task number' Value='1' />
						<Parameter Category='Task Description' Name='Task description' Value='Place Plate' />
						<Parameter Category='Task Description' Name='Use default task description' Value='0' />
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='cdnaSynthesis' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='dilution' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='BeadPlate' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='primerDenaturation' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='cdnaSynthesis' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='dilution' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='TipBox1' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='3' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='3' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='primerDenaturation' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='cdnaSynthesis' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='dilution' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='EmptyTipBox' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='WastePlate' />
					<Parameter Name='Plate type' Value='96 Matrix open reservoir movable' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='cdnaSynthesis' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = headMode;
global.currentStep = &quot;Starting cDNA synthesis&quot;;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='1' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='TipBox1' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[superscriptRow,1]];
task.Volume = currentVolume + 1;
task.Distancefromwellbottom = 0.5;
task.Liquidclass = &quot;j_normal_medium_vol&quot;;
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='EnzymePlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[cdnaSynthesisRow, 1]];
task.Volume = currentVolume + 1;
task.Distancefromwellbottom = 1;
task.Liquidclass = &quot;j_normal_medium_vol&quot;;
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[cdnaSynthesisRow,1]];
// Blowout
task.Volume = PRE_ASP_SMALL;
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='9' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-6' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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						<Parameter Category='Task Description' Name='Task description' Value='Dispense (Bravo)' />
						<Parameter Category='Task Description' Name='Use default task description' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var incubationStartTime = new Date().getTime();
global.currentStep = &quot;cDNA synthesis incubation...&quot;;
' />
					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='tempo = tipsInTrash(trashTips, headMode);
trashTips = tempo.trashTips;
trashTipRow = tempo.trashTipRow;
task.Wellselection = [[trashTipRow,1]];
//trashPosition = tipsInTrash(rows, trashPosition).nextRow;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='EmptyTipBox' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if ((tips.length - rows) &lt; 0){
	throw &quot;Not enough Tips left in Box&quot;;
}else{
	tempo = tipTracker(tips, headMode); 
	tips = tempo.tips;
	tipRow = tempo.tipRow;
	task.Wellselection = [[tipRow,1]];
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='TipBox1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[oilPosition, 1]];
task.Volume = PRE_ASP_MEDIUM;
task.Liquidclass = &quot;j_normal_small_vol&quot;;
task.Distancefromwellbottom = 50; ' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[oilPosition, 1]];
task.Volume = oilVolume;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[cdnaSynthesisRow,1]];
task.Volume = oilVolume;
task.Liquidclass = &quot;j_slow_medium_vol&quot;;
//task.Performtiptouch = true;
//task.Whichsidestousefortiptouch = &quot;South&quot;;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='12' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='offset 65% - Front' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[cdnaSynthesisRow,1]];
task.Liquidclass = &quot;j_normal_small_vol&quot;;
task.Distancefromwellbottom = 12;
task.Volume = PRE_ASP_MEDIUM;
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='tempo = tipsInTrash(trashTips, headMode);
trashTips = tempo.trashTips;
trashTipRow = tempo.trashTipRow;
task.Wellselection = [[trashTipRow,1]];

//task.Wellselection = [[trashPosition,1]];
//trashPosition = tipsInTrash(rows, trashPosition).nextRow;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='EmptyTipBox' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Reserve Location' >
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					<TaskScript Name='TaskScript' Value='var currentTime = new Date().getTime();
var elapsedTime = Math.round((currentTime - incubationStartTime)/1000);

task.Reservationtime =cdnaSynthesisTime - elapsedTime;
' />
					<Parameters >
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						<Parameter Category='' Name='Location to use, plate' Value='ReactionPlate' />
						<Parameter Category='' Name='Location to use, location' Value='6' />
						<Parameter Category='' Name='Reservation time' Value='0' />
					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='dilution' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = headMode;
global.currentStep= &quot;cDNA synthesis finished...&quot;;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='1' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if ((tips.length - rows) &lt; 0){
	throw &quot;Not enough Tips left in Box&quot;;
}else{
	// one thing at a time needs to figure out how this function works
	//task.Location_plate = tipBox
	tempo = tipTracker(tips, headMode); 
	tips = tempo.tips;
	tipRow = tempo.tipRow;
	task.Wellselection = [[tipRow,1]];
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='TipBox1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Task Description' Name='Task number' Value='3' />
						<Parameter Category='Task Description' Name='Task description' Value='Tips On (Bravo)' />
						<Parameter Category='Task Description' Name='Use default task description' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[dilutionRow, 1]];
task.Volume = PRE_ASP_MEDIUM;
task.Distancefromwellbottom = 50;
task.Liquidclass = &quot;j_normal_small_vol&quot;;
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='30' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[dilutionRow,1]];
task.Volume = dilutionVolume;
task.Liquidclass = &quot;j_normal_medium_vol&quot;;
task.Distancefromwellbottom = 1;
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[superscriptRow, 1]];
task.Volume = dilutionVolume;
task.Liquidclass = &quot;j_normal_medium_vol&quot;;
task.Distancefromwellbottom = 2;

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='EnzymePlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[dilutionRow,1]];
task.Volume = preWetVolume;
task.Liquidclass = &quot;j_normal_small_vol&quot;;
task.Distancefromwellbottom = 1;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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						<Parameter Category='Task Description' Name='Task description' Value='Aspirate (Bravo)' />
						<Parameter Category='Task Description' Name='Use default task description' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[cdnaSynthesisRow,1]]; 
task.Distancefromwellbottom = 0.5;
task.Volume = currentVolume+2;
task.Liquidclass = &quot;j_slow_medium_vol&quot;;
//task.Dynamictipextension = dph(sampleVolume, 0.5);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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						<Parameter Category='Task Description' Name='Task description' Value='Aspirate (Bravo)' />
						<Parameter Category='Task Description' Name='Use default task description' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[superscriptRow,1]];
task.Volume = currentVolume + preWetVolume + 2;
task.Distancefromwellbottom = 1; 
task.Liquidclass = &quot;j_normal_medium_vol&quot;;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='EnzymePlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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						<Parameter Category='Task Description' Name='Task description' Value='Dispense (Bravo)' />
						<Parameter Category='Task Description' Name='Use default task description' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='currentVolume = currentVolume + dilutionVolume;
var mix_vol = 0.8 * (currentVolume);
if(mix_vol &gt; MAX_MIX_VOLUME) {
	mix_vol = MAX_MIX_VOLUME;
}
task.Volume = mix_vol;
task.Wellselection = [[superscriptRow,1]];
task.Aspiratedistance = 1;
task.Mixcycles = 3;
task.Liquidclass = &quot;j_slow_mixing&quot;;
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='EnzymePlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[superscriptRow,1]];
task.Volume = PRE_ASP_MEDIUM;
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='EnzymePlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='5' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-4' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='tempo = tipsInTrash(trashTips, headMode);
trashTips = tempo.trashTips;
trashTipRow = tempo.trashTipRow;
task.Wellselection = [[trashTipRow,1]];

//task.Wellselection = [[trashPosition,1]];
//trashPosition = tipsInTrash(rows, trashPosition).nextRow;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='EmptyTipBox' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='1' />
						<Parameter Category='' Name='Temperature' TaskParameterScript='=tempRt;' Value='' />
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						<Parameter Category='' Name='Timeout' Value='1' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='primerDenaturation' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = headMode;
global.currentStep = &quot;Starting primer denaturation...&quot;;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='1' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if ((tips.length - rows) &lt; 0){
	throw &quot;Not enough Tips left in Box&quot;;
}else{
	// one thing at a time needs to figure out how this function works
	//task.Location_plate = tipBox
	tempo = tipTracker(tips, headMode); 
	tips = tempo.tips;
	tipRow = tempo.tipRow;
	task.Wellselection = [[tipRow,1]];
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='TipBox1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Task Description' Name='Task number' Value='3' />
						<Parameter Category='Task Description' Name='Task description' Value='Tips On (Bravo)' />
						<Parameter Category='Task Description' Name='Use default task description' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[sampleRow,1]]; 
task.Distancefromwellbottom = 30;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Volume = PRE_ASP_SMALL;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='EnzymePlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='var currentVolume = sampleVolume;
var mix_vol = 0.6 * (currentVolume);
if(mix_vol &gt; MAX_MIX_VOLUME) {
	mix_vol = MAX_MIX_VOLUME;
}
task.Volume = mix_vol;
task.Wellselection = [[sampleRow,1]];
task.Aspiratedistance = 1;
task.Mixcycles = 3;
task.Liquidclass = &quot;j_slow_mixing&quot;;
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='EnzymePlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[sampleRow,1]]; 
task.Distancefromwellbottom = 0.5;
task.Volume = sampleVolume + 1;
task.Liquidclass = &quot;j_normal_medium_vol&quot;;
//task.Dynamictipextension = dph(sampleVolume, 0.5);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='EnzymePlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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						<Parameter Category='Task Description' Name='Task description' Value='Aspirate (Bravo)' />
						<Parameter Category='Task Description' Name='Use default task description' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[cdnaSynthesisRow,1]];
task.Volume = sampleVolume + 1;

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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						<Parameter Category='Task Description' Name='Task description' Value='Dispense (Bravo)' />
						<Parameter Category='Task Description' Name='Use default task description' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[cdnaSynthesisRow,1]];
// Blowout
task.Volume = PRE_ASP_SMALL;
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='4' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-2' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Reserve Location' >
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					<TaskScript Name='TaskScript' Value='global.currentStep = &quot;Denaturating sample and primer...&quot;;
task.Reservationtime = primerDenatTime;' />
					<Parameters >
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						<Parameter Category='' Name='Location to use, plate' Value='ReactionPlate' />
						<Parameter Category='' Name='Location to use, location' Value='6' />
						<Parameter Category='' Name='Reservation time' Value='0' />
					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<TaskScript Name='TaskScript' Value='task.Temperature = cdnaSynthesisTemp;

' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[cdnaSynthesisRow,1]]; 
task.Distancefromwellbottom = 30;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Volume = PRE_ASP_SMALL;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[cdnaSynthesisRow,1]]; 
task.Distancefromwellbottom = 0.5;
task.Liquidclass = &quot;j_normal_medium_vol&quot;;
task.Volume = sampleVolume + 1;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[superscriptRow,1]];
task.Volume = sampleVolume + 1;
task.Distancefromwellbottom = 2;
task.Liquidclass = &quot;j_normal_medium_vol&quot;;
global.currentStep = &quot;Denaturation finished...&quot;;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='EnzymePlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='var currentVolume = sampleVolume + superscriptVolume;
var mix_vol = 0.8 * (currentVolume);
if(mix_vol &gt; MAX_MIX_VOLUME) {
	mix_vol = MAX_MIX_VOLUME;
}
task.Volume = mix_vol;
task.Wellselection = [[superscriptRow,1]];
task.Aspiratedistance = 1;
task.Mixcycles = 3;
task.Liquidclass = &quot;j_slow_mixing&quot;;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='EnzymePlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<TaskScript Name='TaskScript' Value='task.Temperature = cdnaSynthesisTemp; 
task.TemperatureTolerance = 1;
task.Timeout = 10;' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
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						<Parameter Category='' Name='Wait' Value='1' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.skip();
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='EmptyTipBox' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
		<Cleanup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// updates the global variables 

global.strtVariables.tipBox = tipBox;  
//global.strtVariables.trashPosition = trashPosition;
global.strtVariables.tips = tips;
global.strtVariables.trashTips = trashTips;

print(&quot;This is the tips object: &quot;+ tips);
//print(&quot;This is the trash position:&quot; + trashPosition);
print(&quot;This is the tip box: &quot; + tipBox);
print(&quot;This is the trashTips array: &quot; + trashTips);
' />
					<Parameters >
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Finish' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Cleanup_Processes>
	</Processes>
</Velocity11>