Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  Device_File: C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet_red4-6.dev
  PipettePlatesInInstanceOrder: 1
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Startup_Processes
  Process
    Plate name: Startup
    Task BuiltIn::JavaScript
      TaskScript:
        // Constants:
        var MAX_VOLUME = 170;
        var MAX_MIX_VOLUME = 150;
        var PRE_ASP_LARGE = 15;
        var PRE_ASP_MEDIUM = 10;
        var PRE_ASP_SMALL = 5;
        var enzymeTemp = 4;
        var tempRt = 20;

        // If running standalone:
        var pDph = function (vol, endHeight) {
        	var v = parseFloat(vol);
        	var e = parseFloat(endHeight);
        	if(v > 0 && e > 0 && !isNaN(v+e)) {
        		return 0.078 - 9.501E-5*v + (0.734-e)/v;
        	} else {
        		throw "ValueException";
        	}
        }

        var pTipTracker = function (tips, headMode){
        	var rows = parseInt(headMode.split(",")[2], 10);
        	var direction = parseInt(headMode.split(",")[1], 10);
        	// direction = 2; the headmode is set to use the back rows
        	// direction = 3: the headmode is set to use the front rows
        	if (direction === 1 || direction === 2){
        		var tipRow = tips[tips.length-rows];
        		// tipRow is the upmost tip row that will be used
        		tips = tips.slice(0, tips.length - rows);
        		// tips is an array that looks like this at the start [1,2,3,4,5,6,7,8]
        	}else if (direction === 0 ||direction === 3){
        		var tipRow = tips[rows - 1]
        		tips = tips.slice(rows, tips.length);
        	}else{
        		throw "Weird headMode";
        	}
        	return {tips:tips, tipRow:tipRow};
        }
        var pDispRows = function(rows, dispPosition){
        	var dispArray = new Array(rows);
        	for (i = 0; i < rows; i++){
        		dispArray[i] = [(i+dispPosition), 1];
        	}
        	return dispArray;
        }
        var tipsInTrash = function (trashTips, headMode){
        	var rows = parseInt(headMode.split(",")[2], 10);
        	var direction = parseInt(headMode.split(",")[1], 10);
        	if (direction === 1 || direction === 2){
        		var trashTipRow = trashTips[0];
        		trashTips = trashTips.slice(rows, trashTips.length);
        	}else if (direction === 0 || direction === 3){
        		var trashTipRow = trashTips[0] + rows - 1;
        		trashTips = trashTips.slice(rows, trashTips.length);
        	}else{
        		throw "Weird headMode";
        	}
        	return {trashTips:trashTips, trashTipRow:trashTipRow};
        }

        //Some temporary variables
        var tempo;

        // Oil parameters
        var oilVolume = 40;
        var preWetVolume = 1;

        // Get global protocol parameters//
        var global = GetGlobalObject();
        if(global.runsetMode) global.updateRunset();

        // General global variables
        var protocolName = global.formProtocol || "Row wise SPRI";
        var tipBox = global.strtVariables.tipBox || "TipBox1";
        //var trashPosition = global.strtVariables.trashPosition || 1;
        var tips = global.strtVariables.tips || [1,2,3,4,5,6,7,8];
        var trashTips = global.strtVariables.trashTips || [1,2,3,4,5,6,7,8];

        // Setting functions
        var tipsInTrash = global.tipsInTrash || pTipsInTrash;
        var dph = global.dph || pDph;
        var tipCounter = global.tipCounter || pTipCounter;
        var dispRows = global.dispRows || pDispRows;
        var tipTracker = global.tipTracker || pTipTracker;

        // Protocol variables
        var rows = global.formRows || formRows || 1;
        // Operating with front rows
        var headMode = "2,3,"+ rows+",1";
        var timeMod = global.timeMod; // || formTimeMod;
        var beadRow = global.settings.beadRow || 1;
        var beadVolume = global.settings.beadVolume || formBeadVolume;

        var sampleRow = global.settings.sampleRow || 1;
        var sampleVolume = global.settings.sampleVolume || formSampleVolume;

        var bindRow = global.settings.bindRow || 1;
        var sepRow = global.settings.sepRow || 1;
        var eluteInRow = global.settings.eluteInRow || 1;
        var elutionMixRow = global.settings.elutionMixRow || 1;
        var elutionVolume = global.settings.elutionMixVolume || formElutionMixVolume;

        var ethanolRow = global.settings.ethanolRow || 1;
        var ethanolVolume = 200;
        var washes = 2;

        var bindTime = global.settings.bindTime || formBindTime * timeMod;
        var elutionTime = global.settings.elutionTime || formElutionTime * timeMod;
        var ethanolDryTime = global.settings.ethanolDrytime || 10 * timeMod;
        var pelletTime = global.settings.pelletTime || 1 * timeMod ;
        var pelletTimeShort = global.settings.pelletTimeShort || 0.5 * timeMod;
        var pelletTimeLong = global.settings.pelletTimeLong || 3 * timeMod;
        var nextTemp4 = global.settings.nextTemp4 || 21;
        var nextTemp6 = global.settings.nextTemp6 || 21;

        // Testing out status bar
        global.currentStep = "Starting SPRI cleanup...";

        print("This is the tips object: "+ tips);
        print("This is the tip box: " + tipBox);
        print("This is the trashTips array: " + trashTips);
        print("This is timeMod, " + timeMod);
        print("This is global.formRows, " + global.formRows);
        print("This is global.formTimeMod, " + global.formTimeMod);
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      TaskScript:
        task.Temperature = enzymeTemp;
        task.Wait = false;
      Location: 4
      Timeout: 1
      Allow concurrent operation: 1
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Main_Processes
  Process
    Plate name: TipBox1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: transferBeads
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    Task Bravo::SubProcess
      Sub-process name: transferSample
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    Task Bravo::SubProcess
      Sub-process name: bind
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    Task Bravo::SubProcess
      Sub-process name: removeBindMix
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    Task Bravo::SubProcess
      Sub-process name: wash
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    Task Bravo::SubProcess
      Sub-process name: rinseTips
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    Task Bravo::SubProcess
      Sub-process name: elute
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  Process
    Plate name: BeadPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: transferBeads
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    Task Bravo::SubProcess
      Sub-process name: transferSample
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    Task Bravo::SubProcess
      Sub-process name: bind
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    Task Bravo::SubProcess
      Sub-process name: removeBindMix
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: wash
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    Task Bravo::SubProcess
      Sub-process name: rinseTips
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  Process
    Plate name: EnzymePlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: transferSample
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    Task Bravo::SubProcess
      Sub-process name: elute
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  Process
    Plate name: ReactionPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task Bravo::SubProcess
      Sub-process name: removeBindMix
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    Task Bravo::SubProcess
      Sub-process name: wash
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    Task Bravo::SubProcess
      Sub-process name: elute
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  Process
    Plate name: EmptyTipBox
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task Bravo::SubProcess
      Sub-process name: removeBindMix
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    Task Bravo::SubProcess
      Sub-process name: elute
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    Task Bravo::SubProcess
      Sub-process name: movingTips
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  Process
    Plate name: WastePlate
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: removeBindMix
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    Task Bravo::SubProcess
      Sub-process name: wash
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  Pipette_Process Name=bind
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mWellSelection = [[rows,1]];
        var mLiquidClass = "j_extra_slow_mixing";
        var mPreAspVolume = PRE_ASP_LARGE;
        var mIncubationTime = bindTime;
        var mTimerCycles = 5;
        var mMixVolume = bindMixVolume;
        var mAspDistance = 1.25;
        var mDispDistance = 1.25;
        var mBlowoutHeight = 12;
        var mDoTipTouch = true;
        var mTouchRetract = -7;

        global.currentStep = "Percipitating sample to beads...";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: TipBox1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Volume = mPreAspVolume;
        task.Wellselection = mWellSelection;
        task.Distancefromwellbottom = 50;
        task.Liquidclass = "j_normal_large_vol";
      Location, plate: BeadPlate
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      TaskScript: task.skip();
      Location, plate: BeadPlate
      Mode: On
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 75
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Wellselection = [[bindRow,1]];
        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Mixcycles = mTimerCycles;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BeadPlate
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 192
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Wellselection = [[bindRow,1]];
        task.Liquidclass = mLiquidClass;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      TaskScript: task.skip();
      Location, plate: BeadPlate
      Mode: Off
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Volume = mPreAspVolume;
        task.Wellselection = [[bindRow,1]];
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BeadPlate
      Liquid class: j_normal_large_vol
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: TipBox1
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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    Dependencies
      Sub_Process: transferBeads
      Sub_Process: transferSample
  Pipette_Process Name=elute
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mAspPosition = [[elutionMixRow,1]];
        var mDispPosition = [[eluteInRow,1]];
        var mSepPosition = [[sepRow,1]];
        var mLiquidClass = "j_normal_small_vol";
        var mPreAspVolume = PRE_ASP_LARGE;
        var mTransferVolume = elutionVolume;
        var mAspDistance = 1;
        var mDispDistance = 0.75;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;

        global.currentStep = "Eluting sample...";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: TipBox1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mAspPosition;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: EnzymePlate
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mAspPosition;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: EnzymePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mSepPosition;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = true;
        task.Whichsidestousefortiptouch = "None";
      Location, plate: ReactionPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task BuiltIn::Loop End
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mLiquidClass = "j_slow_mixing";
        var mPreAspVolume = PRE_ASP_LARGE;
        var mIncubationTime = elutionTime;
        var mTimerCycles = 5;
        var mMixVolume = elutionVolume * 0.7;
        var mAspDistance = 1.0;
        var mDispDistance = 1.0;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: ReactionPlate
      Mode: On
      RPM: 500
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 17
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Mixcycles = mTimerCycles;
        task.Aspiratedistance = mAspDistance;
        task.Wellselection = mSepPosition;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: ReactionPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 80
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Aspiratedistance = mAspDistance;
        task.Wellselection = mSepPosition;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: ReactionPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: ReactionPlate
      Mode: Off
      RPM: 500
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Volume = mPreAspVolume;
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        task.Wellselection = mSepPosition;
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: ReactionPlate
      Liquid class: j_normal_large_vol
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task BuiltIn::Group End
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTime;
      Location to use, plate: ReactionPlate
      Location to use, location: 7
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mLiquidClass = "j_slow_small_vol";
        var mPreAspVolume = PRE_ASP_MEDIUM;
        var mTransferVolume = elutionVolume+2;
        var mAspDistance = 0.3;
        var mDispDistance = 0.5;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mSepPosition;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: ReactionPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 25
      TaskScript:
        task.Wellselection =[[sepRow,1]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ReactionPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      TaskScript:
        task.Wellselection = [[eluteInRow,1]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: EnzymePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = [[eluteInRow,1]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: EnzymePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        task.Wellselection = [[8,1]];
        /*
        tempo = tipsInTrash(trashTips, headMode);
        trashTips = tempo.trashTips;
        trashTipRow = tempo.trashTipRow;

        task.Wellselection = [[trashTipRow,1]];
        */
        global.currentStep = "SPRI cleanup finished...";
      Location, plate: EmptyTipBox
      Mark tips as used: 0
      Well selection: Column=0 Row=7
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    Task BuiltIn::Group End
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    Dependencies
      Sub_Process: bind
      Sub_Process: removeBindMix
      Sub_Process: rinseTips
      Sub_Process: transferBeads
      Sub_Process: transferSample
      Sub_Process: wash
  Pipette_Process Name=movingTips
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      Estimated time: 0.0
      TaskScript:
        // Changing from front rows to back rows.
        task.Headmode = "2,2,"+ rows+",1";
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On (Tips On (Bravo))
      TaskScript:
        var tipsToTake = 8-rows+1;
        task.Wellselection = [[tipsToTake,1]];
      Location, plate: EmptyTipBox
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=2 SubsetType=2 TipType=0
        Wells: Column=0 Row=7
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    Task Bravo::secondary::Tips Off
      TaskScript:
        tempo = tipsInTrash(trashTips, headMode);
        trashTips = tempo.trashTips;
        trashTipRow = tempo.trashTipRow;
        task.Wellselection = [[trashTipRow,1]];
      Location, plate: EmptyTipBox
      Mark tips as used: 0
      Well selection: Column=0 Row=3
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    Task BuiltIn::Group End
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  Pipette_Process Name=removeBindMix
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mTransferVolume = sampleVolume + beadVolume + 10;

        global.currentStep = "Separating beads...";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: TipBox1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberTransfers = Math.ceil(mTransferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberTransfers; [mTemp;]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        var mAspPosition = [[bindRow,1]];
        var mDispPosition = [[sepRow,1]];
        var mGetTips = false;
        var mReturnTips = false;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = PRE_ASP_LARGE;
        var mTransferVolume = sampleVolume + beadVolume + 10;
        var mAspDistance = 0.75;
        var mDispDistance = 0.75;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = 0;
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mAspPosition;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BeadPlate
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 21
      TaskScript:
        task.Wellselection = mAspPosition;
        task.Volume = mTransferVolume / mNumberTransfers;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 23
      TaskScript:
        task.Wellselection = mDispPosition;
        task.Volume = mTransferVolume / mNumberTransfers;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = true;
        task.Whichsidestousefortiptouch = "South/North";
      Location, plate: ReactionPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mDispPosition;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: ReactionPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task BuiltIn::Reserve Location
      TaskScript:
        var timeToWait = pelletTimeLong/2;
        task.Reservationtime = timeToWait;
      Location to use, plate: ReactionPlate
      Location to use, location: 7
      Reservation time: 0
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mAspPosition = [[sepRow,1]];
        var mDispPosition = [[8,1]];
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = PRE_ASP_LARGE;
        //var mTransferVolume = sampleVolume + beadVolume + 10;
        var mAspDistance = 0.75;
        var mDispDistance = 35;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 0;
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mAspPosition;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: ReactionPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 75
      TaskScript:
        var volumeToUse = (mTransferVolume / mNumberTransfers * 0.5);

        task.Wellselection = mAspPosition;
        task.Volume = volumeToUse;
        task.Liquidclass = mLiquidClass;
        task.Mixcycles = 3;
        task.Aspiratedistance = 1.25;
        task.Dispensedistance = 1.25;
      Location, plate: ReactionPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Dispense
      TaskScript:
        task.Volume = mPreAspVolume;
        task.Wellselection = mAspPosition;
        task.Distancefromwellbottom = 12;
        task.Liquidclass = "j_blowout";
        task.Performtiptouch = true;
        task.Tiptouchretractdistance = -7;
        task.Whichsidestousefortiptouch = "None";
      Location, plate: ReactionPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task BuiltIn::Reserve Location
      TaskScript:
        var timeToWait = pelletTimeLong/2;
        task.Reservationtime = timeToWait;
      Location to use, plate: ReactionPlate
      Location to use, location: 7
      Reservation time: 0
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mAspPosition = [[sepRow,1]];
        var mDispPosition = [[8,1]];
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = PRE_ASP_LARGE;
        //var mTransferVolume = sampleVolume + beadVolume + 10;
        var mAspDistance = 0.75;
        var mDispDistance = 35;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 0;
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mAspPosition;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: ReactionPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 21
      TaskScript:
        task.Wellselection = mAspPosition;
        task.Volume = mTransferVolume / mNumberTransfers;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ReactionPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 23
      TaskScript:
        task.Wellselection = mDispPosition;
        task.Volume = mTransferVolume / mNumberTransfers;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = true;
        task.Whichsidestousefortiptouch = "South/North";
      Location, plate: WastePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mDispPosition;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: WastePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: EmptyTipBox
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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    Dependencies
      Sub_Process: bind
      Sub_Process: transferBeads
      Sub_Process: transferSample
  Pipette_Process Name=rinseTips
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mMixVolume = 100;
        var mMixCycles = 5;
        var mWellSelection = [[5,1]];
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = MAX_VOLUME;
        var mAspDistance = 1;
        var mDispDistance = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;

        global.currentStep = "Rinsing tips...";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: TipBox1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BeadPlate
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 28
      TaskScript:
        if(mMixVolume > MAX_VOLUME) {
           mMixVolume = MAX_VOLUME * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: BeadPlate
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "South/North";
           task.Tiptouchretractdistance = -10;
        }
      Location, plate: BeadPlate
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: TipBox1
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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    Dependencies
      Sub_Process: bind
      Sub_Process: removeBindMix
      Sub_Process: transferBeads
      Sub_Process: transferSample
      Sub_Process: wash
  Pipette_Process Name=transferBeads
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = "2,3,1,1"; //The beads will always only be in one column
        var mAspPosition = [[beadRow,1]];
        var mDispPosition = [[bindRow,1]];

        var mGetTips = true;
        var mReturnTips = true;

        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 15;
        var mTransferVolume = beadVolume * rows;
        var mAspDistance = 1;
        var mDispDistance = 1;
        // the bead plate contains the volume for both spri clean ups
        var mMixVolume = (0.8 * (beadVolume + 54) > MAX_MIX_VOLUME) ? MAX_MIX_VOLUME : 0.8 * beadVolume;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 10;
        var mMixAspDistance = 1;
        var mMixDispDistance = 5;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if ((tips.length - 1) < 0){
        	throw "Not enough Tips left in Box";
        }else{
        	tempo = tipTracker(tips, mHeadMode);
        	if (rows === 1){
        		// Only update tips array if the tips are not to be returned
        		tips = tempo.tips;
        	}
        	tipRow = tempo.tipRow;
        	task.Wellselection = [[tempo.tipRow, 1]];
        }
      Location, plate: TipBox1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mAspPosition;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 28
      TaskScript:
        if(mMixVolume > MAX_VOLUME) {
           mMixVolume = MAX_VOLUME * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mAspPosition;
        global.currentStep = "Mixing beads...";
      Location, plate: BeadPlate
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mAspPosition;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 12
      TaskScript:
        task.Wellselection = mAspPosition;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
        global.currentStep = "Transferring beads...";
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = dispRows(rows, mDispPosition);
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(rows === 1) {
           task.skip();
        } else {
           task.Wellselection[[tempo.tipRow, 1]];
        }

        /*
        When rows = 2:
        Return the tips that have been used for the bead
        dispersion to theiroriginal position and pick up the
        same tips plus one row extra. Saves a row of tips
        that would be wasted otherwise. Alternatively,
        reserve a row of tip that are used for all the bead
        dispersions (Maybe not good since it blocks the tipbox)
        When rows = 1:
        Skip task.
        */
      Location, plate: TipBox1
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferSample
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var bindMixVolume = 0.8 * (beadVolume + sampleVolume);
        bindMixVolume = (bindMixVolume > MAX_MIX_VOLUME) ? MAX_MIX_VOLUME : bindMixVolume;
        var mAspPosition = [[sampleRow,1]];
        var mDispPosition = [[bindRow,1]];

        global.currentStep = "Transferring sample to beads...";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if (rows === 1){
        	task.skip();
        }else{
        	tempo = TipTracker(tips, headMode);
        	tips = tempo.tips;
        	task.Wellselection = [[tempo.tipRow, 1]];
        }
      Location, plate: TipBox1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mAspPosition;
        task.Volume = PRE_ASP_LARGE;
        task.Liquidclass = "j_normal_medium_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: EnzymePlate
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 16
      TaskScript:
        task.Volume = sampleVolume+3;
        task.Wellselection = mAspPosition;
        task.Distancefromwellbottom = 0.5;
        task.Liquidclass = "j_slow_large_vol";
        //task.Dynamictipextension = dph(sampleVolume, 0.5);
      Location, plate: EnzymePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mDispPosition;
        task.Volume = sampleVolume+3;
        task.Liquidclass = "j_slow_large_vol";
        task.Distancefromwellbottom = 5;
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 28
      TaskScript:
        task.Wellselection = mDispPosition;
        task.Volume = bindMixVolume;
        task.Mixcycles = 2;
        task.Liquidclass = "j_extra_slow_mixing";
        task.Dispenseatdifferentdistance = true;
        task.Aspiratedistance = 1;
        task.Dispensedistance = 5;
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mDispPosition;
        task.Volume = PRE_ASP_LARGE;
        task.Liquidclass="j_blowout";
      Location, plate: BeadPlate
      Distance from well bottom: 12
      Perform tip touch: 1
      Tip touch retract distance: -7
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: TipBox1
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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    Dependencies
      Sub_Process: transferBeads
  Pipette_Process Name=wash
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set temperature - Position
      TaskScript: task.Temperature = nextTemp6;
      Location: 6
      Timeout: 1
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
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    Task Bravo::secondary::Set temperature - Position
      TaskScript: task.Temperature = nextTemp4;
      Location: 4
      Timeout: 1
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    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = headMode;

        global.currentStep = "Washing beads...";
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: TipBox1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =washes; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript: task.Wellselection =  [[ethanolRow,1]];
      Location, plate: BeadPlate
      Volume: =PRE_ASP_MEDIUM;
      Liquid class: j_normal_large_vol
      Distance from well bottom: 45
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var steps = Math.ceil(ethanolVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =steps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        task.Volume = ethanolVolume / steps;
        task.Wellselection = [[ethanolRow,1]];
      Location, plate: BeadPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Volume = ethanolVolume / steps;
        task.Wellselection = [[sepRow,1]];
      Location, plate: ReactionPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 20
      TaskScript:
        task.Volume = (ethanolVolume * 0.8 > MAX_MIX_VOLUME) ? MAX_MIX_VOLUME : ethanolVolume * 0.8;
        task.Wellselection = [[sepRow,1]]
      Location, plate: ReactionPlate
      Location, location: 7
      Liquid class: j_slow_mixing
      Mix cycles: 3
      Aspirate distance: 2
      Dispense at different distance: 1
      Dispense distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeShort;
      Location to use, plate: ReactionPlate
      Location to use, location: 7
      Reservation time: 0
    Task BuiltIn::JavaScript
      TaskScript: steps = Math.ceil((ethanolVolume + 10) / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =steps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 14
      TaskScript:
        task.Volume = (ethanolVolume + 10) / steps;
        task.Wellselection = [[sepRow,1]];
      Location, plate: ReactionPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 0.75
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Volume = (ethanolVolume + 10) / steps;
        task.Wellselection = [[8,1]];
      Location, plate: WastePlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 35
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript: task.Wellselection = [[8,1]];
      Location, plate: WastePlate
      Volume: =PRE_ASP_MEDIUM;
      Liquid class: j_blowout
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=1 SubsetConfig=3 SubsetType=2 TipType=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Group End
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = ethanolDryTime;
      Location to use, plate: ReactionPlate
      Location to use, location: 7
      Reservation time: 0
    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: TipBox1
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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
    Dependencies
      Sub_Process: bind
      Sub_Process: removeBindMix
      Sub_Process: transferBeads
      Sub_Process: transferSample
Cleanup_Processes
  Process
    Plate name: cleanup process - 1
    Task BuiltIn::JavaScript
      TaskScript:
        if (typeof global !== "undefined"){
        	global.strtVariables.tipBox = tipBox;
        	global.strtVariables.trashTips = trashTips;
        	global.strtVariables.tips = tips;
        }

        print("This is the tips object: "+ tips);
        print("This is the tip box: " + tipBox);
        print("This is the trashTips array: " + trashTips);
        global.firstCleanup = 1;
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=2
      TaskScript: task.Temperature = nextTemp4;
      Location: 4
      Timeout: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=6
      TaskScript: task.Temperature = nextTemp6;
      Location: 6
      Timeout: 1
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